PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = (1024, 768)
  expName = GRTv1
  keyboardBackend = PsychToolbox
  runMode = 0
  srEnableInterfaceWithoutConnection = False
  srFileSampleFiltering = FILTER_LEVEL_OFF
  srLiveSampleFiltering = FILTER_LEVEL_OFF
  srModelName = EYELINK 1000 DESKTOP
  srNativeDataFileName = et_data
  srNetIP4Address = 100.1.1.1
  srSamplingRate = 250
  srSimulationMode = False
  srTrackEyes = RIGHT_EYE
  srVOGPupilCenterAlgorithm = ELLIPSE_FIT
  srVOGPupilMeasureTypes = PUPIL_AREA
  srVOGTrackingMode = PUPIL_CR_TRACKING
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Routines
  Routine learning
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    SoundComponent item1
      forceEndRoutine = False
      sound [set every repeat] = $audi1
      startVal [time (s)] = StartI1
      stopVal [duration (s)] = 1.0
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    SoundComponent item2
      forceEndRoutine = False
      sound [set every repeat] = $audi1
      startVal [time (s)] = StartI1
      stopVal [duration (s)] = 1.0
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  Routine task
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    ImageComponent target
      image = stimuli/GRT.png
      size = (1, 1)
      startVal [time (s)] = 0.0
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    ButtonBoxComponent respond
      deviceLabel = ResponseBox
      disabled = True
      discardPrevious = True
      forceEndRoutine = True
      registerOn = True
      startVal [time (s)] = 0.0
      store = first
      storeCorrect = False
      syncScreenRefresh = False
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  Routine cue
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        print(f"win size: {win.size}, aspect: {win.size[0]/win.size[1]:.3f}")
        print(f"x edge in height units: ±{win.size[0]/win.size[1]/2:.3f}")
      Begin Routine:
        cue_valid = rng.integers(2)
        n = rng.integers(4)

        target_quad = order[n]        # target 象限
        pool = []
        for q in range(4):
            if q != target_quad:
                pool.append(q)#Q為象限
        cue_idx = pool[rng.integers(3)]
        #valid cue = target
        if cue_valid == 1:
            cue_idx = target_quad

        else:
            cue_idx = pool[rng.integers(3)]
        cue_posx, cue_posy = POS[cue_idx]
        cue_color = itemColhex[cue_idx]
      End Routine:
        thisExp.addData('cue_n', n)
        thisExp.addData('cue_item', cue_item)
        thisExp.addData('cue_valid', cue_valid)
        thisExp.addData('target_n', n)
        thisExp.addData('cue_idx', cue_idx)
    PolygonComponent cueC
      colorSpace = hex
      fillColor [set every repeat] = $cue_color
      pos [set every repeat] = (cueposx,cueposy)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent cueA
      forceEndRoutine = False
      sound [set every repeat] = $cueA
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine study
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    CodeComponent pattern
      Code Type = Auto->JS
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      Begin Experiment:
        print(f"win size: {win.size}, aspect: {win.size[0]/win.size[1]:.3f}")
        print(f"x edge in height units: ±{win.size[0]/win.size[1]/2:.3f}")
        import numpy as np
        rng = np.random.default_rng()
      Begin Routine:
        #ToDo
        #define colorABCD
        itemAudi = [stimuli/b3.wav,
                    stimuli/b3.wav,
                    stimuli/p3.wav,
                    stimuli/p3.wav]
        itemColhex = ['#B744A1',
                      '#B52C95',
                      '#B744A1',
                      '#B52C95']


        d = 5.0 / np.sqrt(2)      # 偏心度 5 度

        POS = [
            ( d,  d),    # 0 = 右上
            (-d,  d),    # 1 = 左上
            (-d, -d),    # 2 = 左下
            ( d, -d),    # 3 = 右下
        ]
        order = rng.permutation(4)
        print(order)     # 例如 [2 0 3 1]

        posAx, posAy = POS[order[0]]
        posBx, posBy = POS[order[1]]
        posCx, posCy = POS[order[2]]
        posDx, posDy = POS[order[3]]
        NAMES = ['UR', 'UL', 'LL', 'LR']

        quadA = NAMES[order[0]]
        quadB = NAMES[order[1]]
        quadC = NAMES[order[2]]
        quadD = NAMES[order[3]]
        START = [0.3, 1.3, 2.3, 3.3]
        DUR = 1.0

        order_time = rng.permutation(4)

        TimeStartA = START[order_time[0]]
        TimeStartB = START[order_time[1]]
        TimeStartC = START[order_time[2]]
        TimeStartD = START[order_time[3]]
      End Routine:
        NAMES = ['UR', 'UL', 'LL', 'LR']

        thisExp.addData('quadA', NAMES[order[0]])
        thisExp.addData('quadB', NAMES[order[1]])
        thisExp.addData('quadC', NAMES[order[2]])
        thisExp.addData('quadD', NAMES[order[3]])
    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = Fix_Dur
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    SoundComponent audiA
      forceEndRoutine = False
      sound [set every repeat] = $itemAudiA
      startVal [time (s)] = TimeStartA
      stopVal [duration (s)] = DUR
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    PolygonComponent colorA
      colorSpace = hex
      fillColor [set every repeat] = $targetA
      pos [set every repeat] = (posAx, posAy)
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = TimeStartA
      stopVal [duration (s)] = DUR
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    SoundComponent audiB
      forceEndRoutine = False
      sound [set every repeat] = $itemAudiB
      startVal [time (s)] = TimeStartB
      stopVal [duration (s)] = DUR
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    PolygonComponent colorB
      colorSpace = hex
      fillColor [set every repeat] = $targetB
      pos [set every repeat] = (posBx, posBy)
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = TimeStartB
      stopVal [duration (s)] = DUR
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    SoundComponent audiC
      forceEndRoutine = False
      sound [set every repeat] = $itemAudiC
      startVal [time (s)] = TimeStartC
      stopVal [duration (s)] = DUR
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    PolygonComponent colorC
      colorSpace = hex
      fillColor [set every repeat] = $targetC
      pos [set every repeat] = (posCx, posCy)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = TimeStartC
      stopVal [duration (s)] = DUR
      units = deg
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    SoundComponent audiD
      forceEndRoutine = False
      sound [set every repeat] = $itemAudiD
      startVal [time (s)] = TimeStartD
      stopVal [duration (s)] = DUR
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    PolygonComponent colorD
      colorSpace = hex
      fillColor [set every repeat] = $targetD
      pos [set every repeat] = (posDx, posDy)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = TimeStartD
      stopVal [duration (s)] = DUR
      units = deg
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  Routine Intro
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    CodeComponent check_screen
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import monitors
        m = win.monitor
        print(f"monitor: {m.name}")
        print(f"width_cm: {m.getWidth()}, dist_cm: {m.getDistance()}")
        print(f"res: {m.getSizePix()}, win: {win.size}")
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 20
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    Routine study
    Routine cue
    Routine task
  LoopTerminator trials
