PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = #808080
  colorSpace = hex
  expName = VAWM
  keyboardBackend = PsychToolbox
  runMode = 0
  srEnableInterfaceWithoutConnection = False
  srFileSampleFiltering = FILTER_LEVEL_OFF
  srLiveSampleFiltering = FILTER_LEVEL_OFF
  srModelName = EYELINK 1000 DESKTOP
  srNativeDataFileName = et_data
  srNetIP4Address = 100.1.1.1
  srSamplingRate = 250
  srSimulationMode = False
  srTrackEyes = RIGHT_EYE
  srVOGPupilCenterAlgorithm = ELLIPSE_FIT
  srVOGPupilMeasureTypes = PUPIL_AREA
  srVOGTrackingMode = PUPIL_CR_TRACKING
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Routines
  Routine trial
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  Routine studyindtruc
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    TextComponent intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to join the experiment.
        First you will see 2 color and 2 audio in the studying phase. Try to memorize it. During the second stage, you need to make decision if the color and audio match previous stage. Press [Yes] or [No] to make response.
        Now, we will start practice block. Press [Space] to continue.
    KeyboardComponent confirm
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine study_stage
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    CodeComponent StudyCode
      Code Type = Auto->JS
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      Begin Routine:
        fix = .3
        StimTime1 = fix
        StimDur1 = 1
        StimTime2 = StimTime1 + StimDur1
        StimDur2 = 1
        StimTime3 = StimTime2 + StimDur2
        StimDur3 = 1
        StimTime4 = StimTime3 + StimDur3
        StimDur4 = 1
      End Routine:
        thisExp.addData('study_entry_index', study.thisN)
    TextComponent fix
      letterHeight = .2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fix
      text = +
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    PolygonComponent stim1
      colorSpace = hex
      fillColor [set every repeat] = $color1_target
      pos [set every repeat] = (-.5, 0)
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = StimTime1
      stopVal [duration (s)] = StimDur1
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    PolygonComponent stim2
      colorSpace = hex
      fillColor [set every repeat] = $color2_target
      pos [set every repeat] = (.5,0)
      shape = rectangle
      size = (5,5)
      startVal [time (s)] = StimTime2
      stopVal [duration (s)] = StimDur2
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    SoundComponent audi1
      forceEndRoutine = False
      sound [set every repeat] = $audio1_target_file
      startVal [time (s)] = StimTime3
      stopVal [duration (s)] = StimDur3
      volume [set every repeat] = vol1
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    SoundComponent audi2
      forceEndRoutine = False
      sound [set every repeat] = $audio2_target_file
      startVal [time (s)] = StimTime4
      stopVal [duration (s)] = StimDur4
      volume [set every repeat] = vol2
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  Routine probe
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    CodeComponent ProbeCode
      Code Type = Auto->JS
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      Begin Routine:
        trial = study.thisN
        conditions = [0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17]
        #p = [.25,.125,.125,.125,.0625,.0625,.125,.0625,.0625]
        p = [.125,.125,.0625,.0625,.0625,.0625,.0625,.0625,.03125,.03125,.03125,.03125,.0625,.0625,.03125,.03125,.03125,.03125]
        condition = random.choices(conditions, weights =p, k=1)[0]
        #AX AX= color, XA= audio
        #AA=0	HA =1	LA = 2
        #AH=3	HH=4	LH=5
        #AL=6	HL=7	LL=8
        if condtiion == 0 :#AA .25
           targetCol = color1_target
           targetAud = audio1_target_file
        elif condition == 1:#AA.25
            targetCol = color2_target
            targetAud = audio2_target_file
        if condition == 2:#HA
           targetCol = color1_target
           targetAud = audio1_H_file
        elif condition == 3:#HA
            targetCol = color2_target
            targetAud = audio2_H_file
        if condition == 4:#LA
           targetCol = color1_target
           targetAud = audio1_L_file
        elif condition == 5:#LA
            targetCol = color2_target
            targetAud = audio2_L_file
        if condition == 6:#AH
           targetCol = color1_H
           targetAud = audio1_target_file
        elif condition == 7:#AH
            targetCol = color2_H
            targetAud = audio2_target_file
        if condition == 8:#HH
           targetCol = color1_H
           targetAud = audio1_H_file
        elif condition == 9:#HH
            targetCol = color2_H
            targetAud = audio2_H_file
        if condition == 10:#LH
           targetCol = color1_L
           targetAud = audio1_H_file
        elif condition == 11:#LH
            targetCol = color2_L
            targetAud = audio2_H_file
        if condition == 12: #AL
           targetCol = color1_L
           targetAud = audio1_target_file
        elif condition == 13: #AL
            targetCol = color2_L
            targetAud = audio2_target_file
        if condition == 14:#HL
           targetCol = color1_H
           targetAud = audio1_L_file
        elif condition == 15:#HL
            targetCol = color2_H
            targetAud = audio2_L_file
        if condition == 16:#LL
           targetCol = color1_L
           targetAud = audio1_L_file
        elif condition == 17:#LL
            targetCol = color2_L
            targetAud = audio2_L_file
      End Routine:
        thisExp.addData('condition', condition)
    TextComponent Fixation
      letterHeight = .2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      text = +
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    PolygonComponent targetV
      colorSpace = hex
      fillColor [set every repeat] = $targetCol
      pos [set every repeat] = (0,0)
      shape = rectangle
      size = (5,5)
      startVal [time (s)] = .3
      stopVal [duration (s)] = 1
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    SoundComponent targetA
      forceEndRoutine = False
      sound [set every repeat] = $targetAud
      startVal [time (s)] = .3
      stopVal [duration (s)] = 1
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    CedrusButtonBoxComponent Response plugin="psychopy-cedrus"
      allowedKeys [set every repeat] = 0,1
      deviceNumber = 0
      disabled = True
      discard previous = True
      forceEndRoutine = True
      registerOn = press
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = False
      syncScreenRefresh = True
      useBoxTimer = False
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 2
      store = first key
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  Routine practice_intro
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    TextComponent prac_intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        This block is practicing task. The feedback will be provide after response.
        Press [Space] to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if condition == 0 and key_resp.keys == 'y':
            resp ="Correct"
        elif condition == 1 and key_resp.keys == 'y':
            resp ="Correct"
        elif condition == 2 and key_resp.keys == 'n':
            resp ="Correct"
        elif condition == 3 and key_resp.keys == 'n':
            resp ="Correct"
        elif condition == 4 and key_resp.keys == 'n':
            resp ="Correct"
        elif condition == 5 and key_resp.keys == 'n':
            resp ="Correct"
        elif condition == 6 and key_resp.keys == 'n':
            resp ="Correct"
        elif condition == 7 and key_resp.keys == 'n':
            resp ="Correct"
        elif condition == 8 and key_resp.keys == 'n':
            resp ="Correct"
        elif condition == 9 and key_resp.keys == 'n':
            resp ="Correct"
        elif condition == 10 and key_resp.keys == 'n':
            resp ="Correct"
        elif condition == 11 and key_resp.keys == 'n':
            resp ="Correct"
        elif condition == 12 and key_resp.keys == 'n':
            resp ="Correct"
        elif condition == 13 and key_resp.keys == 'n':
            resp ="Correct"
        elif condition == 14 and key_resp.keys == 'n':
            resp ="Correct"
        elif condition == 15 and key_resp.keys == 'n':
            resp ="Correct"
        elif condition == 16 and key_resp.keys == 'n':
            resp ="Correct"
        elif condition == 17 and key_resp.keys == 'n':
            resp ="Correct"
        else:
            resp ="Incorrect"
      End Routine:
        thisExp.addData("Acc",resp)
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    TextComponent answer
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $resp
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Flow
  Routine studyindtruc
  Routine practice_intro
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = combined_75trials.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('trial', np.int64(1)), ('audio1_target', 'p'), ('audio1_H', 'b'), ('audio1_L', 'k'), ('audio1_target_file', 'T01_apa.wav'), ('audio1_H_file', 'T02_aba.wav'), ('audio1_L_file', 'T03_aka.wav'), ('audio2_target', 't'), ('audio2_H', 'g'), ('audio2_L', 'p'), ('audio2_target_file', 'T04_ata.wav'), ('audio2_H_file', 'T05_aga.wav'), ('audio2_L_file', 'T06_apa.wav'), ('color1_target', '#0099D0'), ('color1_H', '#0082B1'), ('color1_L', '#0095CC'), ('color2_target', '#375BAB'), ('color2_H', '#005ECF'), ('color2_L', '#4361AC')]),
      OrderedDict([('trial', np.int64(2)), ('audio1_target', 'p'), ('audio1_H', 'd'), ('audio1_L', 't'), ('audio1_target_file', 'T02_apa.wav'), ('audio1_H_file', 'T03_ada.wav'), ('audio1_L_file', 'T04_ata.wav'), ('audio2_target', 'k'), ('audio2_H', 'n'), ('audio2_L', 'p'), ('audio2_target_file', 'T05_aka.wav'), ('audio2_H_file', 'T06_ana.wav'), ('audio2_L_file', 'T07_apa.wav'), ('color1_target', '#7B8F22'), ('color1_H', '#69AC15'), ('color1_L', '#7F8F22'), ('color2_target', '#009F6E'), ('color2_H', '#007A71'), ('color2_L', '#009F6B')]),
      OrderedDict([('trial', np.int64(3)), ('audio1_target', 'p'), ('audio1_H', 'v'), ('audio1_L', 'theta'), ('audio1_target_file', 'T03_apa.wav'), ('audio1_H_file', 'T04_ava.wav'), ('audio1_L_file', 'T05_athetaa.wav'), ('audio2_target', 'f'), ('audio2_H', 'sh'), ('audio2_L', 'theta'), ('audio2_target_file', 'T06_afa.wav'), ('audio2_H_file', 'T07_asha.wav'), ('audio2_L_file', 'T08_athetaa.wav'), ('color1_target', '#46812B'), ('color1_H', '#989900'), ('color1_L', '#4B8024'), ('color2_target', '#BA7949'), ('color2_H', '#D08D68'), ('color2_L', '#BD784F')]),
      OrderedDict([('trial', np.int64(4)), ('audio1_target', 't'), ('audio1_H', 'g'), ('audio1_L', 'k'), ('audio1_target_file', 'T04_ata.wav'), ('audio1_H_file', 'T05_aga.wav'), ('audio1_L_file', 'T06_aka.wav'), ('audio2_target', 'p'), ('audio2_H', 'b'), ('audio2_L', 'k'), ('audio2_target_file', 'T07_apa.wav'), ('audio2_H_file', 'T08_aba.wav'), ('audio2_L_file', 'T09_aka.wav'), ('color1_target', '#A54253'), ('color1_H', '#89608F'), ('color1_L', '#A9455A'), ('color2_target', '#675DA2'), ('color2_H', '#384AB4'), ('color2_L', '#6359A2')])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
    Routine study_stage
    LoopInitiator inner loopType="TrialHandler"
      conditionsFile = combined_75trials.csv
      loopType = random
      nReps = 16
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      conditions:
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      Routine probe
      Routine feedback
    LoopTerminator inner
  LoopTerminator practice
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = test.csv
    loopType = random
    nReps = 75
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    conditions:
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    Routine study_stage
    LoopInitiator SFTtask loopType="TrialHandler"
      conditionsFile = task.xlsx
      loopType = random
      nReps = 16
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      conditions:
        [{'trial': 1, 'audio1_target_file': 'T01_apa.wav', 'audio1_H_file': 'T02_aba.wav', 'audio1_L_file': 'T03_aka.wav', 'audio2_target_file': 'T04_ata.wav', 'audio2_H_file': 'T05_aga.wav', 'audio2_L_file': 'T06_apa.wav', 'color1_target': '#0099D0', 'color1_H': '#0082B1', 'color1_L': '#0095CC', 'color2_target': '#375BAB', 'color2_H': '#005ECF', 'color2_L': '#4361AC'},
        {'trial': 2, 'audio1_target_file': 'T02_apa.wav', 'audio1_H_file': 'T03_ada.wav', 'audio1_L_file': 'T04_ata.wav', 'audio2_target_file': 'T05_aka.wav', 'audio2_H_file': 'T06_ana.wav', 'audio2_L_file': 'T07_apa.wav', 'color1_target': '#7B8F22', 'color1_H': '#69AC15', 'color1_L': '#7F8F22', 'color2_target': '#009F6E', 'color2_H': '#007A71', 'color2_L': '#009F6B'},
        {'trial': 3, 'audio1_target_file': 'T03_apa.wav', 'audio1_H_file': 'T04_ava.wav', 'audio1_L_file': 'T05_athetaa.wav', 'audio2_target_file': 'T06_afa.wav', 'audio2_H_file': 'T07_asha.wav', 'audio2_L_file': 'T08_athetaa.wav', 'color1_target': '#46812B', 'color1_H': '#989900', 'color1_L': '#4B8024', 'color2_target': '#BA7949', 'color2_H': '#D08D68', 'color2_L': '#BD784F'},
        {'trial': 4, 'audio1_target_file': 'T04_ata.wav', 'audio1_H_file': 'T05_aga.wav', 'audio1_L_file': 'T06_aka.wav', 'audio2_target_file': 'T07_apa.wav', 'audio2_H_file': 'T08_aba.wav', 'audio2_L_file': 'T09_aka.wav', 'color1_target': '#A54253', 'color1_H': '#89608F', 'color1_L': '#A9455A', 'color2_target': '#675DA2', 'color2_H': '#384AB4', 'color2_L': '#6359A2'}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
      Routine probe
    LoopTerminator SFTtask
  LoopTerminator trials
